PsychoPy2experiment version="2022.1.3"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expInfo['visit'],expName, expInfo['date'])
  Experiment info = {'handedness': 'r/l/a', 'visit': '001/002', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = 220817OSL_EEfRT
  keyboardBackend = ioHub
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Routines
  Routine feedback
    CodeComponent feedback_text_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_text=""
      Begin Routine:
        if popped==True:
            feedback_text="You completed the task!"
        else:
            feedback_text="You did not complete the task."
    TextComponent text_feedback
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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  Routine hard
    CodeComponent hard_countdown_code
      Code Type = Auto->JS
      Begin Experiment:
        countdownStarted = False
        text_hard_timer_value = ''
      Begin Routine:
        text_hard_timer_value = 21
        if not countdownStarted:
            countdownClock = core.CountdownTimer(21)
            countdownStarted = True
        #21 second timer
      Each Frame:
        timeRemaining = countdownClock.getTime()
        text_hard_timer_value = 'Time remaining: %s sec' %(int(timeRemaining))
        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            countdownStarted = False
      End Routine:
        countdownStarted = False
    CodeComponent hard_text_code
      Code Type = Auto->JS
      Begin Experiment:
        hard_text = ''
      Begin Routine:
        hard_text = 'Push the %s key until bar fills up'%(nondominant_key)
    TextComponent text_hard
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $hard_text
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    TextComponent text_hard_timer
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text [set every frame] = $text_hard_timer_value
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    CodeComponent hard_check_keys_code
      Code Type = Auto->JS
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      Begin Routine:
        npumps=0
        maxPumps=100
      Each Frame:
        if expInfo['handedness'].lower().startswith("l") == True:
            if event.getKeys(['l']):
                npumps+=1
                if npumps>=maxPumps:
                    popped=True
                    continueRoutine=False
        else:
            if event.getKeys(['s']):
                npumps+=1
                if npumps>=maxPumps:
                    popped=True
                    continueRoutine=False
      End Routine:
        thisExp.addData('trial_difficulty', maxPumps)
        thisExp.addData('trial_key_press_count', npumps)
        thisExp.addData('trial_completion', popped)
    CodeComponent hard_balloon_size_code
      Code Type = Auto->JS
      Begin Experiment:
        balloon_size=0.00
      Begin Routine:
        #balloon image's starting size
        balloon_size=0.00
        popped=False
      Each Frame:
        balloon_size=npumps*0.015
    PolygonComponent hard_background
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.2, 0.55)
      startVal [time (s)] = 0.0
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    PolygonComponent hard_balloon_body
      fillColor = $[.533,-1.000,-1.000]
      lineColor = $[.533,-1.000,-1.000]
      pos [set every frame] = (0, 0)
      shape = rectangle
      size [set every frame] = $[.2, balloon_size/2.75]
      startVal [time (s)] = 0.0
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    KeyboardComponent hard_trial_key_press
      allowedKeys = 'l','s','L','S'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 21
      store = all keys
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  Routine prac_cross
    TextComponent text_prac_cross
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine ready
    TextComponent text_ready
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Ready?
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  Routine prac_easy
    CodeComponent prac_easy_countdown
      Code Type = Auto->JS
      Begin Experiment:
        countdownStarted = False
        text_prac_easy_timer_value = ''
      Begin Routine:
        text_prac_easy_timer_value = 7
        if not countdownStarted:
            countdownClock = core.CountdownTimer(7)
            countdownStarted = True
        #7 second timer
      Each Frame:
        timeRemaining = countdownClock.getTime()
        text_prac_easy_timer_value = 'Time remaining: %s sec' %(int(timeRemaining))
        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            countdownStarted = False
      End Routine:
        countdownStarted = False
    CodeComponent prac_easy_text_code
      Code Type = Auto->JS
      Begin Experiment:
        prac_easy_text = ''
      Begin Routine:
        prac_easy_text = 'Push the %s key until bar fills up'%(dominant_key)
    TextComponent text_prac_easy
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prac_easy_text
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    TextComponent text_prac_easy_timer
      letterHeight = 0.1
      pos = (0, .75)
      startVal [time (s)] = 0.0
      text [set every frame] = $text_prac_easy_timer_value
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    CodeComponent prac_easy_check_keys
      Code Type = Auto->JS
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      Begin Routine:
        npumps=0
        maxPumps=30
      Each Frame:
        if expInfo['handedness'].lower().startswith("l") == True:
            if event.getKeys(['s']):
                npumps+=1
                if npumps>=maxPumps:
                    popped=True
                    continueRoutine=False
        else:
            if event.getKeys(['l']):
                npumps+=1
                if npumps>=maxPumps:
                    popped=True
                    continueRoutine=False
    CodeComponent prac_easy_ballon_size
      Code Type = Auto->JS
      Begin Experiment:
        balloon_size=0.00
      Begin Routine:
        #balloon image's starting size
        balloon_size=0.00
        popped=False
      Each Frame:
        balloon_size=npumps*0.0184
    PolygonComponent prac_easy_background
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.2, 0.55)
      startVal [time (s)] = 0.0
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    PolygonComponent prac_easy_ballon_body
      fillColor = $[.533,-1.000,-1.000]
      lineColor = $[.553,-1.000,-1.000]
      pos [set every frame] = (0, 0)
      shape = rectangle
      size [set every frame] = $[.2, balloon_size]
      startVal [time (s)] = 0.0
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    KeyboardComponent prac_easy_key_press
      allowedKeys = 'l','s','L','S'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      store = all keys
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  Routine prac_instr
    TextComponent text_prac_instr1
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Any question at this point?

        If not, get your hands in position (the L and S keys) and press the SPACE key to start the PRACTICE trials.
    KeyboardComponent key_resp_prac_instr1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prac_ready
    TextComponent text_prac
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Ready?
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  Routine prac_feedback_amount
    CodeComponent prac_feedback_amount_text
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_text_amount=""
      Begin Routine:
        if popped==True:
            if procedure=='Win':
                if nReps_hard == 1:
                    feedback_text_amount="You won $%s!" %amount
                else:
                    feedback_text_amount="You won $1!"
            else:
                feedback_text_amount="No money this round."
        else:
            feedback_text_amount="You did not complete the task."
    TextComponent text_prac_feedback_amount
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $feedback_text_amount
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  Routine prac_instr_value
    CodeComponent prac_choose_branch
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual
        import random
        text_prac_instr_value_select=""
        #EEfRT (Treadway et al., 2009)
        #organized and developed for Psychopy by Erick Rogers 08/15/16
        #bizerkmaverick@gmail.com
      Begin Routine:
        selectBlock=randint(1,3) #randomly selects easy or hard trial

        if not countdownStarted:
            countdownClock = core.CountdownTimer(5)
            countdownStarted = True
        #5 second timer

        text_prac_instr_value_select="The reward value of the hard task is $%s. \n\nThe chance of winning is %s percent. \n\nPress %s to choose the Easy task. \n\nPress %s to choose the Hard task" % (amount, probability, dominant_key, nondominant_key)
      Each Frame:
        timeRemaining = countdownClock.getTime()

        if timeRemaining <= 0.0:
            continueRoutine = False
            countdownStarted = False
      End Routine:
        #For right hand dominant, press l for easy, s for hard, otherwise chosen randomly after 5 secs
        #For left hand dominant, press s for easy, l for hard.
        if expInfo['handedness'].lower().startswith("r") == True:
            if key_resp_prac_select.keys=='l':
                nReps_easy=1
                nReps_hard=0
            elif key_resp_prac_select.keys=='s':
                nReps_easy=0
                nReps_hard=1
            elif selectBlock==1:
                nReps_easy=0
                nReps_hard=1
            elif selectBlock==2:
                nReps_easy=1
                nReps_hard=0
        elif expInfo['handedness'].lower().startswith("l") == True:
            if key_resp_prac_select.keys=='s':
                nReps_easy=1
                nReps_hard=0
            elif key_resp_prac_select.keys=='l':
                nReps_easy=0
                nReps_hard=1
            elif selectBlock==1:
                nReps_easy=0
                nReps_hard=1
            elif selectBlock==2:
                nReps_easy=1
                nReps_hard=0
        else:
            if key_resp_prac_select.keys=='l':
                nReps_easy=1
                nReps_hard=0
            elif key_resp_prac_select.keys=='s':
                nReps_easy=0
                nReps_hard=1
            elif selectBlock==1:
                nReps_easy=0
                nReps_hard=1
            elif selectBlock==2:
                nReps_easy=1
                nReps_hard=0
        #
        countdownStarted = False
    KeyboardComponent key_resp_prac_select
      allowedKeys = ['s', 'l','S', 'L']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent text_prac_instr_value
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $text_prac_instr_value_select
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  Routine show_winnings
    TextComponent winning_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        The winnings from two trials have been randomly selected to be added to your payment.

        Press the SPACE key to advance.
    KeyboardComponent winning_message_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent winning_code
      Code Type = Auto->JS
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      Begin Experiment:
        max_win_total = 0
      Begin Routine:
        if len(earned_value_list) > 0:
            earned_value_array = np.array(earned_value_list)
            if len(earned_value_list) == 1:
                max_win = np.nanmax(earned_value_array)
            else:
                max_win = np.nanmax(earned_value_array) + np.partition(earned_value_array.flatten(), -2)[-2]
        max_win = round(max_win, 2)
        max_win_total += max_win
    TextComponent winning_text_2
      letterHeight = 0.03
      pos = (.9, .9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $max_win
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  Routine cross
    TextComponent text_cross
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine instr1
    KeyboardComponent key_resp_instr1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_instr1
      letterHeight = 0.065
      startVal [time (s)] = 0.0
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      text:
        You are going to play the lever-press game.

        The game will consist of a series of individual trials.

        The length of time required to complete each trial will depend upon decisions you make during that trial.

        You will play the game twice during this experiment, for exactly 15 minutes each time, after which you will be asked to stop.

        Even if you choose to go through trials quickly, you will still play for the same total amount of time.



        Press the SPACE key to continue.
    CodeComponent handedness_code
      Code Type = Auto->JS
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      Begin Experiment:
        #EEfRT (Treadway et al., 2009)
        #organized and developed for Psychopy by Erick Rogers 08/15/16
        #bizerkmaverick@gmail.com
        #modified by Xi Yang from 02/22 to 08/22 for Oregon Sleep Lab

        dominant_hand = ""
        nondominant_hand = ""
        if expInfo['handedness'].lower().startswith("l") == True:
            dominant_hand = "left"
            dominant_key = 'S'
            nondominant_hand = "right"
            nondominant_key = 'L'
        else:
            dominant_hand = "right"
            dominant_key = 'L'
            nondominant_hand = "left"
            nondominant_key = 'S'
  Routine instr2
    TextComponent text_instr2
      letterHeight = 0.065
      startVal [time (s)] = 0.0
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      text:
        For each trial, you will have an opportunity to win some money.

        In order to be eligible to win money on a given trial, you must first complete a task.

        The task involves making repeated button presses within a certain amount of time.

        For each trial you can choose to complete an Easy task, or a Hard task.

        Press the SPACE key to continue.
    KeyboardComponent key_resp_instr2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr3
    CodeComponent handedness_code3
      Code Type = Auto->JS
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      Begin Experiment:
        instr3_text=''
      Begin Routine:
        instr3_text = 'If you choose the Easy task, you will need to press the %s key with your %s INDEX finger approximately 30 times within 7 seconds.\n\n You are eligible to win $1 each time you complete the Easy task.\n\nPress the SPACE key to continue.'%(dominant_key, dominant_hand)
    TextComponent text_instr3
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr3_text
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    KeyboardComponent key_resp_instr3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr4
    CodeComponent handedness_code4
      Code Type = Auto->JS
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      Begin Experiment:
        instr4_text=''
      Begin Routine:
        instr4_text = 'If you choose the Hard task, you will need to press the %s key with the PINKY finger of your %s hand approximately 100 times within 21 seconds.\n\nFor each trial, the amount that you are eligible to win if you complete the Hard task will change.\n\nThe amount that the Hard task is worth on a given trial will be presented to you at the beginning of that trial.\n\nHard trials range from $1.20 to around $4.00.\n\nPress the SPACE key to continue.'%(nondominant_key, nondominant_hand)
    KeyboardComponent key_resp_instr4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_instr4
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr4_text
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  Routine instr5
    KeyboardComponent key_resp_instr5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_instrr5
      letterHeight = 0.065
      startVal [time (s)] = 0.0
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      text:
        Completing the Easy or Hard task makes you eligible to receive money on that trial, but completion alone does NOT guarantee that you will win money.



        Press the SPACE key to continue.
  Routine instr6
    TextComponent text_instr6
      letterHeight = 0.065
      startVal [time (s)] = 0.0
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      text:
        Some trials are less likely to give you money than others.
        To help you decide which trials are more likely to give you money, you will be told the probability that you WILL receive money IF you complete the task at the beginning of each trial.



        Press the SPACE key to continue.
    KeyboardComponent key_resp_instr6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr7
    KeyboardComponent key_resp_instr7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text
      letterHeight = 0.065
      startVal [time (s)] = 0.0
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      text:
        Some trials have an 88% of giving you money if you complete the task.

        Some trials have a 50% chance of receiving the money if you complete the task.

        Some trials have a 12% chance of receiving the money if you complete the task.



        Press the SPACE key to continue.
  Routine instr8
    CodeComponent handedness_code8
      Code Type = Auto->JS
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      Begin Experiment:
        instr8_text=''
      Begin Routine:
        instr8_text = 'At the beginning of each trial, you will have a choice between the Hard task and the Easy task.\n\nThe amount you are eligible to win on the Hard task, and the probability of winning will be presented at the beginning of each trial.\n\nTo choose the Hard task, press %s.\n\nTo choose the Easy task, press %s.\n\nPress the SPACE key to continue.'%(nondominant_key, dominant_key)
    TextComponent text_instr8
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr8_text
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    KeyboardComponent key_resp_instr8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr9
    KeyboardComponent key_resp_instr9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_instr9
      letterHeight = 0.065
      startVal [time (s)] = 0.0
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      text:
        We cannot pay you based on every choice you make.

        However, at the end of the experiment, we will randomly select 4 trials (2 from each session) and add them to your payment.


        You won’t know which trials get added to your payment.
        Therefore, while the decisions you make on only four trials WILL count, any trial COULD count.

        Press the SPACE key to continue.
  Routine prac_hard
    CodeComponent prac_hard_countdonw
      Code Type = Auto->JS
      Begin Experiment:
        countdownStarted = False
        text_prac_hard_timer_value = ''
      Begin Routine:
        text_prac_hard_timer_value = 21
        if not countdownStarted:
            countdownClock = core.CountdownTimer(21)
            countdownStarted = True
        #21 second timer
      Each Frame:
        timeRemaining = countdownClock.getTime()
        text_prac_hard_timer_value = 'Time remaining: %s sec' %(int(timeRemaining))

        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            countdownStarted = False
      End Routine:
        countdownStarted = False
    CodeComponent prac_hard_text_code
      Code Type = Auto->JS
      Begin Experiment:
        prac_hard_text = ''
      Begin Routine:
        prac_hard_text = 'Push the %s key until bar fills up' %nondominant_key
    TextComponent text_prac_hard
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prac_hard_text
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    TextComponent text_prac_hard_timer
      letterHeight = 0.1
      pos = (0, .75)
      startVal [time (s)] = 0.0
      text [set every frame] = $text_prac_hard_timer_value
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    CodeComponent prac_hard_check_keys
      Code Type = Auto->JS
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      Begin Routine:
        npumps=0
        maxPumps=100
      Each Frame:
        if expInfo['handedness'].lower().startswith("l") == True:
            if event.getKeys(['l']):
                npumps+=1
                if npumps>=maxPumps:
                    popped=True
                    continueRoutine=False
        else:
            if event.getKeys(['s']):
                npumps+=1
                if npumps>=maxPumps:
                    popped=True
                    continueRoutine=False
    CodeComponent prac_hard_balloon_size
      Code Type = Auto->JS
      Begin Experiment:
        balloon_size=0.00
      Begin Routine:
        #balloon image's starting size
        balloon_size=0.00
        popped=False
      Each Frame:
        balloon_size=npumps*0.015
    PolygonComponent prac_hard_background
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.2, 0.55)
      startVal [time (s)] = 0.0
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    PolygonComponent prac_hard_balloon_body
      fillColor = $[.533,-1,-1]
      lineColor = $[.533,-1,-1]
      pos [set every frame] = (0, 0)
      shape = rectangle
      size [set every frame] = $[.2, balloon_size/2.75]
      startVal [time (s)] = 0.0
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    KeyboardComponent prac_hard_key_press
      allowedKeys = 'l','s','L','S'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 21
      store = all keys
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  Routine start_trials
    CodeComponent start_trials_code
      Code Type = Auto->JS
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      Begin Experiment:
        start_trials_text = ''
        prac_text = "PRACTICE"
        round_text = "first"
        round_counter = 0
        earned_value_list = []
        max_win = 0
      Begin Routine:
        round_counter += 1
        if round_counter == 2:
            prac_text = "first"
            round_text = "final"

        start_trials_text = "Any question about the task for the experimenter after the %s round? \n\nIf not, get your hands in position (the L and S keys) and press the SPACE key to start the %s round of the REAL trials."  % (prac_text, round_text)
        earned_value_list = []
        max_win = 0
    TextComponent text_start_trials
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $start_trials_text
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    KeyboardComponent key_resp_start_trials
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine easy
    CodeComponent easy_countdown_code
      Code Type = Auto->JS
      Begin Experiment:
        countdownStarted = False
        text_easy_timer_value = ''
      Begin Routine:
        text_easy_timer_value = 7
        if not countdownStarted:
            countdownClock = core.CountdownTimer(7)
            countdownStarted = True
        #7 second timer
      Each Frame:
        timeRemaining = countdownClock.getTime()
        test = loop_timer.getTime()
        text_easy_timer_value = 'Time remaining: %s sec' %(int(timeRemaining))
        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            countdownStarted = False
      End Routine:
        countdownStarted = False
    CodeComponent easy_text_code
      Code Type = Auto->JS
      Begin Experiment:
        easy_text = ''
      Begin Routine:
        easy_text = 'Push the %s key until bar fills up'%(dominant_key)
    TextComponent text_easy
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $easy_text
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    TextComponent text_easy_timer
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text [set every frame] = $text_easy_timer_value
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    CodeComponent easy_check_keys_code
      Code Type = Auto->JS
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      Begin Routine:
        npumps=0
        maxPumps=30
      Each Frame:
        if expInfo['handedness'].lower().startswith("l") == True:
            if event.getKeys(['s']):
                npumps+=1
                if npumps>=maxPumps:
                    popped=True
                    continueRoutine=False
        else:
            if event.getKeys(['l']):
                npumps+=1
                if npumps>=maxPumps:
                    popped=True
                    continueRoutine=False
      End Routine:
        thisExp.addData('trial_difficulty', maxPumps)
        thisExp.addData('trial_key_press_count', npumps)
        thisExp.addData('trial_completion', popped)
    CodeComponent easy_balloon_size_code
      Code Type = Auto->JS
      Begin Experiment:
        balloon_size=0.00
      Begin Routine:
        #balloon image's starting size
        balloon_size=0.00
        popped=False
      Each Frame:
        balloon_size=npumps*0.0184
    PolygonComponent easy_background
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.2, 0.55)
      startVal [time (s)] = 0.0
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    PolygonComponent easy_balloon_body
      fillColor = $[.533,-1.000,-1.000]
      lineColor = $[.533,-1.000,-1.000]
      pos [set every frame] = (0, 0)
      shape = rectangle
      size [set every frame] = $[.2, balloon_size]
      startVal [time (s)] = 0.0
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    KeyboardComponent easy_trial_key_press
      allowedKeys = 'l','s','L','S'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      store = all keys
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  Routine end_trial_loop
    CodeComponent end_trial_loop_code
      Code Type = Auto->JS
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      Each Frame:
        # end the trial loop after 15mins
        if loop_timer.getTime() >= 900:
            continueRoutine = False
            trials.finished = True
  Routine prac_you_lose
    TextComponent text_prac_you_lose
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = No money this round
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  Routine instr10
    TextComponent text_instr10
      letterHeight = 0.065
      startVal [time (s)] = 0.0
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      text:
        Also keep in mind that you only have 15 minutes to get through the game, and the Hard task takes about twice as long as the Easy task.

        If you choose all Easy tasks, you will probably get through approximately 70 trials, if you choose all Hard tasks, you will probably get through around 35 trials, so choose your Hard tasks carefully!

        Now you are ready to play the game.
        You will begin with a set of 4 PRACTICE trials.

        Press the SPACE key to start.
    KeyboardComponent key_resp_instr10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_value
    CodeComponent choose_branch_code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual
        import random
        text_instr_value_select=""
      Begin Routine:
        selectBlock=randint(1,3) #randomly selects easy or hard trial

        if not countdownStarted:
            countdownClock = core.CountdownTimer(5)
            countdownStarted = True
        #5 second timer

        text_instr_value_select="The reward value of the hard task is $%s. \n\nThe chance of winning is %s percent. \n\nPress %s to choose the Easy task. \n\nPress %s to choose the Hard task" % (amount, probability, dominant_key, nondominant_key)
      Each Frame:
        timeRemaining = countdownClock.getTime()

        if timeRemaining <= 0.0:
            continueRoutine = False
            countdownStarted = False
      End Routine:
        #For right hand dominant, press l for easy, s for hard, otherwise chosen randomly after 5 secs
        #For left hand dominant, press s for easy, l for hard.
        if expInfo['handedness'].lower().startswith("r") == True:
            if key_resp_select.keys=='l':
                nReps_easy=1
                nReps_hard=0
            elif key_resp_select.keys=='s':
                nReps_easy=0
                nReps_hard=1
            elif selectBlock==1:
                nReps_easy=0
                nReps_hard=1
            elif selectBlock==2:
                nReps_easy=1
                nReps_hard=0
        elif expInfo['handedness'].lower().startswith("l") == True:
            if key_resp_select.keys=='s':
                nReps_easy=1
                nReps_hard=0
            elif key_resp_select.keys=='l':
                nReps_easy=0
                nReps_hard=1
            elif selectBlock==1:
                nReps_easy=0
                nReps_hard=1
            elif selectBlock==2:
                nReps_easy=1
                nReps_hard=0
        else:
            if key_resp_select.keys=='l':
                nReps_easy=1
                nReps_hard=0
            elif key_resp_select.keys=='s':
                nReps_easy=0
                nReps_hard=1
            elif selectBlock==1:
                nReps_easy=0
                nReps_hard=1
            elif selectBlock==2:
                nReps_easy=1
                nReps_hard=0
        #
        countdownStarted = False
    KeyboardComponent key_resp_select
      allowedKeys = ['s', 'l','S', 'L']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent text_instr_value
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $text_instr_value_select
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  Routine cross_15min
    TextComponent cross_15
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent loop_timer_code
      Code Type = Auto->JS
      Begin Routine:
        if trials.thisN == 0: #only on the first iteration
            loop_timer = core.Clock()
  Routine prac_feedback
    CodeComponent prac_feedback_text
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_text=""
      Begin Routine:
        if popped==True:
            feedback_text="You completed the task!"
        else:
            feedback_text="You did not complete the task."
    TextComponent text_prac_feedback
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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  Routine wait
    TextComponent wait_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        End of one round of the task.
        Please wait for the experimenter.
    KeyboardComponent wait_key_resp
      allowedKeys = 'w'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_incomplete_feedback
    TextComponent text_prac_incomplete_feedback
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You did not complete the task
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  Routine prac_you_won
    TextComponent text_prac_you_won
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You won [dollar]
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  Routine feedback_amount
    CodeComponent feedback_amount_text
      Code Type = Auto->JS
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      Begin Routine:
        if popped==True:
            if procedure=='Win':
                if nReps_hard == 1:
                    feedback_text_amount="You won $%s!" %amount
                    earned_value_list.append(amount)
                else:
                    feedback_text_amount="You won $1!"
                    earned_value_list.append(1)
            else:
                feedback_text_amount="No money this round."
        else:
            feedback_text_amount="You did not complete the task."
    TextComponent text_feedback_amount
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $feedback_text_amount
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  Routine start
    TextComponent start_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        EEfRT


        Press the SPACE key to advance.
    KeyboardComponent start_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You have completed both rounds of the task!

        The experimenter has increased your payment!
    KeyboardComponent end_key_resp
      allowedKeys = 'w'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent end_text2
      letterHeight = 0.03
      pos = (.9, .9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $max_win_total
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Flow
  Routine start
  Routine instr1
  Routine instr2
  Routine instr3
  Routine instr4
  Routine instr5
  Routine instr6
  Routine instr7
  Routine instr8
  Routine instr9
  Routine instr10
  Routine prac_instr
  LoopInitiator prac_trials loopType="TrialHandler"
    conditionsFile = practice_trial_types.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'amount': 1.78, 'probability': '50 Percent', 'procedure': 'WinPractice'},
      {'amount': 2.68, 'probability': '12 Percent', 'procedure': 'LosePractice'},
      {'amount': 3.58, 'probability': '50 Percent', 'procedure': 'LosePractice'},
      {'amount': 4.12, 'probability': '88 Percent', 'procedure': 'WinPractice'}]
    Routine prac_cross
    Routine prac_instr_value
    Routine prac_ready
    LoopInitiator prac_easy_trials loopType="TrialHandler"
      loopType = random
      nReps = nReps_easy
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      Routine prac_easy
      Routine prac_feedback
      Routine prac_feedback_amount
    LoopTerminator prac_easy_trials
    LoopInitiator prac_hard_trials loopType="TrialHandler"
      loopType = random
      nReps = nReps_hard
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      Routine prac_hard
      Routine prac_feedback
      Routine prac_feedback_amount
    LoopTerminator prac_hard_trials
  LoopTerminator prac_trials
  LoopInitiator round_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine start_trials
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = trial_types.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'amount': 3.04, 'procedure': 'Lose', 'probability': 12},
        {'amount': 1.42, 'procedure': 'Lose', 'probability': 50},
        {'amount': 2.86, 'procedure': 'Lose', 'probability': 50},
        {'amount': 3.22, 'procedure': 'Win', 'probability': 88},
        {'amount': 1.78, 'procedure': 'Lose', 'probability': 12},
        {'amount': 1.96, 'procedure': 'Win', 'probability': 88},
        {'amount': 2.68, 'procedure': 'Lose', 'probability': 50},
        {'amount': 1.78, 'procedure': 'Win', 'probability': 88},
        {'amount': 2.14, 'procedure': 'Win', 'probability': 50},
        {'amount': 2.5, 'procedure': 'Win', 'probability': 12},
        {'amount': 3.94, 'procedure': 'Lose', 'probability': 50},
        {'amount': 2.32, 'procedure': 'Win', 'probability': 50},
        {'amount': 2.14, 'procedure': 'Lose', 'probability': 12},
        {'amount': 1.42, 'procedure': 'Win', 'probability': 88},
        {'amount': 3.04, 'procedure': 'Lose', 'probability': 88},
        {'amount': 1.24, 'procedure': 'Lose', 'probability': 12},
        {'amount': 3.58, 'procedure': 'Win', 'probability': 88},
        {'amount': 2.32, 'procedure': 'Lose', 'probability': 12},
        {'amount': 4.12, 'procedure': 'Win', 'probability': 50},
        {'amount': 4.12, 'procedure': 'Lose', 'probability': 12},
        {'amount': 2.5, 'procedure': 'Win', 'probability': 50},
        {'amount': 3.94, 'procedure': 'Lose', 'probability': 12},
        {'amount': 3.22, 'procedure': 'Lose', 'probability': 12},
        {'amount': 4.12, 'procedure': 'Win', 'probability': 88},
        {'amount': 2.68, 'procedure': 'Win', 'probability': 88},
        {'amount': 3.4, 'procedure': 'Lose', 'probability': 50},
        {'amount': 2.5, 'procedure': 'Win', 'probability': 88}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
      Routine cross_15min
      Routine instr_value
      Routine ready
      LoopInitiator easy_trials loopType="TrialHandler"
        loopType = random
        nReps = nReps_easy
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        Routine easy
        Routine feedback
        Routine feedback_amount
      LoopTerminator easy_trials
      LoopInitiator hard_trials loopType="TrialHandler"
        loopType = random
        nReps = nReps_hard
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        Routine hard
        Routine feedback
        Routine feedback_amount
      LoopTerminator hard_trials
      Routine end_trial_loop
    LoopTerminator trials
    Routine cross
    Routine wait
    Routine show_winnings
  LoopTerminator round_loop
  Routine end
